PsychoPy2experiment version="1.79.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = experiment
  Units = use prefs
  Screen = 1
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Routines
  Routine right
    ImageComponent image_2
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = ../stimuli/rightbase.jpg
      size = [0.5, 0.5]
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  Routine select
    CodeComponent code
      Begin Experiment:
        repsLeft = 0
        repsRight = 0
      Begin Routine:
        import random

        if random.randint(0, 1) == 0:
            repsLeft = 1
            repsRight = 0
        else:
            repsLeft = 0
            repsRight = 1
  Routine left
    ImageComponent image
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = ../stimuli/leftbase.jpg
      size = [0.5, 0.5]
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 40
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    Routine select
    LoopInitiator leftBlock loopType="TrialHandler"
      loopType = sequential
      nReps = repsLeft
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      Routine left
    LoopTerminator leftBlock
    LoopInitiator rightBlock loopType="TrialHandler"
      loopType = random
      nReps = repsRight
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      Routine right
    LoopTerminator rightBlock
  LoopTerminator trials
